<?xml version="1.0" encoding="UTF-8"?>
<batch>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.rawdataimport.RawDataImportModule">
        <parameter name="Raw data file names">
            <file>/mnt/research/ShadeLab/Chodkowski/JGI_SynCom/Mass_spec/untargeted_analysis/nonpolar/negative/allSamples/20171207_KBL_AS-JC_502921_MCom_1to3mem_QEHF_C18_104_NEG-MSMS_100_2mem-Bt-Ps-35hr_2__9mL_102030eV__S1_Run18.mzML</file>
            <file>/mnt/research/ShadeLab/Chodkowski/JGI_SynCom/Mass_spec/untargeted_analysis/nonpolar/negative/allSamples/20171207_KBL_AS-JC_502921_MCom_1to3mem_QEHF_C18_104_NEG-MSMS_101_2mem-Bt-Ps-40hr_2__9mL_102030eV__S1_Run145.mzML</file>
            <file>/mnt/research/ShadeLab/Chodkowski/JGI_SynCom/Mass_spec/untargeted_analysis/nonpolar/negative/allSamples/20171207_KBL_AS-JC_502921_MCom_1to3mem_QEHF_C18_104_NEG-MSMS_102_2mem-Bt-Ps-45hr_2__9mL_102030eV__S1_Run98.mzML</file>
            <file>/mnt/research/ShadeLab/Chodkowski/JGI_SynCom/Mass_spec/untargeted_analysis/nonpolar/negative/allSamples/20171207_KBL_AS-JC_502921_MCom_1to3mem_QEHF_C18_104_NEG-MSMS_103_2mem-Cv-Ps-12pt5hr_2__9mL_102030eV__S1_Run142.mzML</file>
            <file>/mnt/research/ShadeLab/Chodkowski/JGI_SynCom/Mass_spec/untargeted_analysis/nonpolar/negative/allSamples/20171207_KBL_AS-JC_502921_MCom_1to3mem_QEHF_C18_104_NEG-MSMS_104_2mem-Cv-Ps-25hr_2__9mL_102030eV__S1_Run45.mzML</file>
            <file>/mnt/research/ShadeLab/Chodkowski/JGI_SynCom/Mass_spec/untargeted_analysis/nonpolar/negative/allSamples/20171207_KBL_AS-JC_502921_MCom_1to3mem_QEHF_C18_104_NEG-MSMS_105_2mem-Cv-Ps-30hr_2__9mL_102030eV__S1_Run86.mzML</file>
            <file>/mnt/research/ShadeLab/Chodkowski/JGI_SynCom/Mass_spec/untargeted_analysis/nonpolar/negative/allSamples/20171207_KBL_AS-JC_502921_MCom_1to3mem_QEHF_C18_104_NEG-MSMS_106_2mem-Cv-Ps-35hr_2__9mL_102030eV__S1_Run89.mzML</file>
            <file>/mnt/research/ShadeLab/Chodkowski/JGI_SynCom/Mass_spec/untargeted_analysis/nonpolar/negative/allSamples/20171207_KBL_AS-JC_502921_MCom_1to3mem_QEHF_C18_104_NEG-MSMS_107_2mem-Cv-Ps-40hr_2__9mL_102030eV__S1_Run71.mzML</file>
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        </parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.peakpicking.massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">1000.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.peakpicking.massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>2</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">10.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.masslistmethods.ADAPchromatogrambuilder.ADAPChromatogramBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <spectrum_type>CENTROIDED</spectrum_type>
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass list">masses</parameter>
        <parameter name="Min group size in # of scans">5</parameter>
        <parameter name="Group intensity threshold">500.0</parameter>
        <parameter name="Min highest intensity">1000.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.003</absolutetolerance>
            <ppmtolerance>0.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.peakpicking.deconvolution.DeconvolutionModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Suffix">deconvoluted</parameter>
        <parameter name="Algorithm" selected="Wavelets (ADAP)">
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            <module name="Wavelets (ADAP)">
                <parameter name="S/N threshold">10.0</parameter>
                <parameter name="S/N estimator" selected="Intensity window SN">
                    <module name="Intensity window SN"/>
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                </parameter>
                <parameter name="min feature height">1000.0</parameter>
                <parameter name="coefficient/area threshold">100.0</parameter>
                <parameter name="Peak duration range">
                    <min>0.08</min>
                    <max>0.25</max>
                </parameter>
                <parameter name="RT wavelet range">
                    <min>0.01</min>
                    <max>0.2</max>
                </parameter>
            </module>
        </parameter>
        <parameter measure="MEDIAN" name="m/z center calculation" weighting="NONE">CenterFunction</parameter>
        <parameter name="m/z range for MS2 scan pairing (Da)" selected="true">0.003</parameter>
        <parameter name="RT range for MS2 scan pairing (min)" selected="true">0.1</parameter>
        <parameter name="Remove original feature list">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.isotopes.deisotoper.IsotopeGrouperModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">deisotoped</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.003</absolutetolerance>
            <ppmtolerance>0.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.1</parameter>
        <parameter name="Monotonic shape">false</parameter>
        <parameter name="Maximum charge">3</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Remove original peaklist">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.alignment.join.JoinAlignerModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.003</absolutetolerance>
            <ppmtolerance>0.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">75.0</parameter>
        <parameter name="Retention time tolerance" type="absolute">0.25</parameter>
        <parameter name="Weight for RT">25.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.filtering.rowsfilter.RowsFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Minimum peaks in a row" selected="true">2.0</parameter>
        <parameter name="Minimum peaks in an isotope pattern" selected="true">2</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="Peak duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false"/>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Keep only peaks with MS2 scan (GNPS)">true</parameter>
        <parameter name="Reset the peak number ID">false</parameter>
        <parameter name="Remove source feature list after filtering">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.gapfilling.peakfinder.PeakFinderModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">gap-filled</parameter>
        <parameter name="Intensity tolerance">0.1</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.003</absolutetolerance>
            <ppmtolerance>0.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.3</parameter>
        <parameter name="RT correction">false</parameter>
        <parameter name="Parallel (never combined with RT correction)">false</parameter>
        <parameter name="Remove original feature list">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.io.csvexport.CSVExportModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">
            <current_file>/mnt/home/chodkows/MZmine-2.41.2_nonPolar_Neg/finalFeatureTableMSMS</current_file>
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        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Export common elements">
            <item>Export row ID</item>
            <item>Export row m/z</item>
            <item>Export row retention time</item>
        </parameter>
        <parameter name="Export data file elements">
            <item>Peak area</item>
        </parameter>
        <parameter name="Export quantitation results and other information">false</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.io.gnpsexport.GNPSExportAndSubmitModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">
            <current_file>/mnt/home/chodkows/MZmine-2.41.2_nonPolar_Neg/mzmine_nonPolarNegMSMS</current_file>
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        </parameter>
        <parameter name="Mass list">masses</parameter>
        <parameter name="Merge MS/MS (experimental)" selected="true">
            <parameter name="Select spectra to merge">across samples</parameter>
            <parameter name="m/z merge mode">weighted average (remove outliers)</parameter>
            <parameter name="intensity merge mode">sum intensities</parameter>
            <parameter name="Expected mass deviation">
                <absolutetolerance>0.001</absolutetolerance>
                <ppmtolerance>5.0</ppmtolerance>
            </parameter>
            <parameter name="Cosine threshold (%)">0.7</parameter>
            <parameter name="Peak count threshold (%)">0.2</parameter>
            <parameter name="Isolation window offset (m/z)">0.0</parameter>
            <parameter name="Isolation window width (m/z)">3.0</parameter>
        </parameter>
        <parameter name="Filter rows">ONLY WITH MS2</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.projectmethods.projectsave.ProjectSaveAsModule">
        <parameter name="Project file">
            <current_file>/mnt/scratch/chodkows/MZmineNonPolarNeg_MSMS.mzmine</current_file>
        </parameter>
    </batchstep>
</batch>
