<?xml version="1.0" encoding="UTF-8"?>
<batch>
    <batchstep method="net.sf.mzmine.modules.projectmethods.projectload.ProjectLoadModule">
        <parameter name="Project file">
            <current_file>/mnt/research/ShadeLab/Chodkowski/JGI_SynCom/Mass_spec/untargeted_analysis/MZmineAnalysis/MZmineNonPolarNeg_MSMS.mzmine</current_file>
        </parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.identification.spectraldbsearch.LocalSpectralDBSearchModule">
        <parameter name="Feature lists" type="NAME_PATTERN">
            <name_pattern>Aligned feature list filtered gap-filled</name_pattern>
        </parameter>
        <parameter name="MassList">masses</parameter>
        <parameter name="Database file">
            <current_file>/mnt/home/chodkows/MoNA-export-All_Spectra.msp</current_file>
            <last_file>/mnt/home/chodkows/MoNA-export-All_Spectra.msp</last_file>
            <last_file>/mnt/home/chodkows/MoNA-export-LC-MS-MS_Positive_Mode.msp</last_file>
        </parameter>
        <parameter name="MS level">2</parameter>
        <parameter name="Precursor m/z tolerance">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Minimum ion intensity">0.0</parameter>
        <parameter name="13C deisotoping" selected="false">
            <parameter name="m/z tolerance">
                <absolutetolerance>0.001</absolutetolerance>
                <ppmtolerance>5.0</ppmtolerance>
            </parameter>
            <parameter name="Monotonic shape"/>
            <parameter name="Maximum charge"/>
        </parameter>
        <parameter name="Crop spectra to m/z overlap">true</parameter>
        <parameter name="Spectral m/z tolerance">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" selected="true" type="absolute">0.1</parameter>
        <parameter name="Minimum  matched signals">4</parameter>
        <parameter name="Similarity" selected="Weighted dot-product cosine">
            <module name="Weighted dot-product cosine">
                <parameter name="Weights">MassBank (mz^2 * I^0.5)</parameter>
                <parameter name="Minimum  cos similarity">0.7</parameter>
                <parameter name="Remove unmatched signals">false</parameter>
            </module>
            <module name="Composite dot -product identity (similar to NIST search)">
                <parameter name="Weights">MassBank (mz^2 * I^0.5)</parameter>
                <parameter name="Minimum  cos similarity">0.7</parameter>
            </module>
        </parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.io.csvexport.CSVExportModule">
        <parameter name="Feature lists" type="NAME_PATTERN">
            <name_pattern>Aligned feature list filtered gap-filled</name_pattern>
        </parameter>
        <parameter name="Filename">
            <current_file>/mnt/home/chodkows/MZmine-2.41.2_nonPolar_Neg/NonPolarNegMSMS_spectraMatches</current_file>
            <last_file>/mnt/home/chodkows/MZmine-2.41.2_nonPolar_Neg/NonPolarNegMSMS_spectraMatches</last_file>
            <last_file>/mnt/home/chodkows/MZmine-2.41.2_3/PolarNegMSMS_spectraMatches</last_file>
            <last_file>/mnt/home/chodkows/MZmine-2.41.2/PolarPosMSMS_spectraMatches</last_file>
        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Export common elements">
            <item>Export row ID</item>
            <item>Export row m/z</item>
            <item>Export row retention time</item>
            <item>Export row identity (main ID)</item>
            <item>Export row identity (all IDs)</item>
            <item>Export row identity (main ID + details)</item>
        </parameter>
        <parameter name="Export data file elements">
            <item>Peak area</item>
        </parameter>
        <parameter name="Export quantitation results and other information">false</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
</batch>
